<PlusConfiguration version="2.6">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="OMT Central Line - Telemed"
      Description="Telemed config for OMT Central Line."
    />
    <Device
      Id="VideoDevice"
      Type="TelemedVideo"
      DepthMm="40">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UN" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>